CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:mC3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:NuclearStain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:Venus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:MitoTracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:NuclearStain
    Name the primary objects to be identified:NucObj
    Typical diameter of objects, in pixel units (Min,Max):60,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:MCT
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:0.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:NucObj
    Name the objects to be identified:CellsCyto
    Select the method to identify the secondary objects:Propagation
    Select the input image:NuclearStain
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.45
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MaskObjects:[module_num:7|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
    Select objects to be masked:CellsCyto
    Name the masked objects:MaskedCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucObj
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:Yes
    Name the outline image:MaskedVenusOutlines
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:Venus
    Select objects to measure:MaskedCells

FilterObjects:[module_num:9|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
    Name the output objects:MaskedCellsfilteredVenusMedian
    Select the object to filter:MaskedCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MedianIntensity_Venus
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:Yes
    Maximum value:0.05

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:Venus
    Select objects to measure:MaskedCellsfilteredVenusMedian

FilterObjects:[module_num:11|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
    Name the output objects:MaskedCellsfilteredVenusMean
    Select the object to filter:MaskedCellsfilteredVenusMedian
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:FilteredObjects_Venusmean
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_Venus
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:Yes
    Maximum value:0.07

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:MitoTracker
    Select objects to measure:MaskedCellsfilteredVenusMean

FilterObjects:[module_num:13|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
    Name the output objects:MaskedCellsfilteredIntensities
    Select the object to filter:MaskedCellsfilteredVenusMean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_MitoTracker
    Filter using a minimum measurement value?:Yes
    Minimum value:0.005
    Filter using a maximum measurement value?:Yes
    Maximum value:0.07

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:MaskedCellsfilteredIntensities
    Calculate the Zernike features?:No

FilterObjects:[module_num:15|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
    Name the output objects:MaskedCellsFilteredBySize_intensities
    Select the object to filter:MaskedCellsfilteredIntensities
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:FilteredObjects
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5000
    Filter using a maximum measurement value?:Yes
    Maximum value:30000

MeasureObjectIntensity:[module_num:16|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
    Hidden:3
    Select an image to measure:Venus
    Select an image to measure:mC3
    Select an image to measure:MitoTracker
    Select objects to measure:MaskedCellsFilteredBySize_intensities

Morph:[module_num:17|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
    Select the input image:mC3
    Name the output image:mC3NoBG
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:50
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:18|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
    Select the input image:Venus
    Name the output image:VenusNoBG
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:50
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:19|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
    Select the input image:MitoTracker
    Name the output image:MitoTrackerNoBg
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:50
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MeasureCorrelation:[module_num:20|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
    Hidden:3
    Hidden:1
    Select an image to measure:mC3NoBG
    Select an image to measure:VenusNoBG
    Select an image to measure:MitoTrackerNoBg
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:MaskedCellsFilteredBySize_intensities

MeasureObjectIntensity:[module_num:21|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
    Hidden:3
    Select an image to measure:MitoTrackerNoBg
    Select an image to measure:VenusNoBG
    Select an image to measure:mC3NoBG
    Select objects to measure:MaskedCellsFilteredBySize_intensities

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\\\\\\\\\\\\\SATURN\\\\\\\\Phoenix\\\\\\\\Elizabeth_Phenix\\\\\\\\EO_20180629_Colocalization_PLOT_checkNeed to run analysis on M3\\\\\\\\20180629_QiansBimMutants\\\\\\\\Measurement2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Image|PathName_MitoTracker,Image|FileName_MitoTracker,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,MaskedCellsFilteredBySize_intensities|Intensity_MeanIntensity_MitoTrackerNoBg,MaskedCellsFilteredBySize_intensities|Intensity_MeanIntensity_VenusNoBG,MaskedCellsFilteredBySize_intensities|Correlation_Correlation_VenusNoBG_MitoTrackerNoBg
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20181011
    Overwrite existing files without warning?:No
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